PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = solo_project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimulus
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Hello!

        During the experiment, you will be presented with a text string at the center of your screen. Your task is to identify and decide whether the text is a word or a nonword as quickly and accurately as possible.

        Press 'y' for word, and 'n' for nonword.
  Routine thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Your response has been recorded.

        Thank you for participating in the experiment! :)
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = list_4_vvtl.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'quality  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'quilaty', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'medicine  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'midecine', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'radical  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'radacil', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'proposal  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'propasol', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'resume  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'ruseme', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'specific  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'spicefic', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'specimen  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'specemin', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'tribute  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'trubite', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'category  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'catogery', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'ceremony  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'ceromeny', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'amateur  ', 'condition': 'control', 'corr_resp': 'y'},
      {'stimulus': 'ametaur', 'condition': 'vvtl', 'corr_resp': 'n'},
      {'stimulus': 'advisory  ', 'condition': 'control', 'corr_resp': 'y'}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
    Routine trial
  LoopTerminator trials
  Routine thank_you
