PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = intentional_binding_exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and beep sound (0-1000) in ms. Use the Slider to pick the answer.
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ib_cons.xlsx
    loopType = random
    nReps = 33
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
